PsychoPy2experiment version="3.1.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  expName = lexical_decision
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Routines
  Routine Intro
    TextComponent Intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        Welcome!
        Press 1 for word,
        Press 0 for non-word
        To start, press SPACE
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine End
    TextComponent bye
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        You are done!

        Thank you! Bye !
    KeyboardComponent bye_resp
      allowedKeys [set every repeat] = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine Task
    KeyboardComponent task_resp
      allowedKeys [set every repeat] = '1','0','space'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent text_show
      letterHeight = 0.1
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $engText
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = text_cond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('engText', 'desk'), ('Text', '책상'), ('CorrAns', 1), ('Cond', 'w')]),
      OrderedDict([('engText', 'reng'), ('Text', '뱐지'), ('CorrAns', 0), ('Cond', 'nw')]),
      OrderedDict([('engText', 'calm'), ('Text', '치마'), ('CorrAns', 1), ('Cond', 'w')]),
      OrderedDict([('engText', 'skai'), ('Text', '연어'), ('CorrAns', 0), ('Cond', 'w')]),
      OrderedDict([('engText', 'moon'), ('Text', '다리'), ('CorrAns', 1), ('Cond', 'w')]),
      OrderedDict([('engText', 'phur'), ('Text', '러개'), ('CorrAns', 0), ('Cond', 'nw')]),
      OrderedDict([('engText', 'deer'), ('Text', '사슴'), ('CorrAns', 1), ('Cond', 'w')]),
      OrderedDict([('engText', 'quit'), ('Text', '곱밤'), ('CorrAns', 0), ('Cond', 'nw')]),
      OrderedDict([('engText', 'goba'), ('Text', '갸교'), ('CorrAns', 0), ('Cond', 'nw')]),
      OrderedDict([('engText', 'face'), ('Text', '신청'), ('CorrAns', 1), ('Cond', 'w')]),
      OrderedDict([('engText', 'test'), ('Text', '증거'), ('CorrAns', 1), ('Cond', 'w')]),
      OrderedDict([('engText', 'rest'), ('Text', '휴직'), ('CorrAns', 1), ('Cond', 'w')]),
      OrderedDict([('engText', 'geeb'), ('Text', '둔거'), ('CorrAns', 0), ('Cond', 'nw')]),
      OrderedDict([('engText', 'bone'), ('Text', '탁주'), ('CorrAns', 1), ('Cond', 'w')])]
    Routine Task
  LoopTerminator trials
  Routine End
